CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images module is blank in the GUI since we are adding the image path in CLI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract well and site metadata to use and assess which images have been flagged']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<Well>[0-9]{4})F(?P<FOV>[0-9]{4})T(?P<Time>[0-9]{4})Z(?P<Z_slice>[0-9]{3})C(?P<Channel>[0-9]{1}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline is meant for correction with 5 channels specifically:', '', 'DAPI', '488', '561', 'GFP', 'Brightfield', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:GSDM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:CL488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:CL561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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notes:['']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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['']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
    Select the input image:CL488
    Name the output image:IllumCL488
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:CL561
    Name the output image:IllumCL561
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:GSDM
    Name the output image:IllumGSDM
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:BF
    Name the output image:IllumBF
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Apply illumination correction functions to all channels']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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:CL488
    Name the output image:CorrCL488
    Select the illumination function:IllumCL488
    Select how the illumination function is applied:Subtract
    Select the input image:CL561
    Name the output image:CorrCL561
    Select the illumination function:IllumCL561
    Select how the illumination function is applied:Subtract
    Select the input image:BF
    Name the output image:CorrBF
    Select the illumination function:IllumBF
    Select how the illumination function is applied:Subtract
    Select the input image:GSDM
    Name the output image:CorrGSDM
    Select the illumination function:IllumGSDM
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:11|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notes:['Save DAPI images as same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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notes:['Save CL488 images as the same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrCL488
    Select method for constructing file names:From image filename
    Select image name for file prefix:CL488
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrCL561
    Select method for constructing file names:From image filename
    Select image name for file prefix:CL561
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CorrBF
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CorrGSDM
    Select method for constructing file names:From image filename
    Select image name for file prefix:GSDM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:IC_QC_Run
    Overwrite existing files without warning?:No
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